PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = final experiment colour and memory
  keyboardBackend = ioHub
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Routines
  Routine routine2
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = pix
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    ImageComponent image
      image [set every repeat] = $bw_images
      size = (0.5, 0.5)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 3.0
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    ButtonComponent Redbutton
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.6, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.3
      text = Red
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    ButtonComponent Blue_button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.4, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.3
      text = Blue
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    ButtonComponent Yellow_button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.4, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.3
      text = Yellow
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    ButtonComponent Green_button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.6, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.3
      text = Green
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  Routine routine1
    PolygonComponent fixation_2
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = pix
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    ImageComponent image_2
      image [set every repeat] = $colour_images
      size = (0.5, 0.5)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.0
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  Routine introduction2
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Introduction

        On seeing the images ,press 'red', 'blue', 'yellow' or 'green' button
  Routine introduction1
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Introduction

        Kindly look at the given images.
  Routine introduction3
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Introduction

        On seeing the image, press 1 if you can clearly remember the image. Press 2 if the rememberance is misty
  Routine routine3
    PolygonComponent fixation_3
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = pix
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    ImageComponent image_3
      image [set every repeat] = $r3pictures
      size = (0.5, 0.5)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 3.0
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.3
      store = all keys
      storeCorrect = True
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  Routine Thanks
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank You
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Flow
  LoopInitiator trials_4 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine introduction1
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = colouredimages_16.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'colour_images': 'C:\\Users\\bhvpe\\Desktop\\20 images\\colour_furniture_bluetable.png', 'type': 'furniture', 'colour': 'blue'},
        {'colour_images': 'C:\\Users\\bhvpe\\Desktop\\20 images\\colour_furniture_greensofa.png', 'type': 'furniture', 'colour': 'green'},
        {'colour_images': 'C:\\Users\\bhvpe\\Desktop\\20 images\\colour_furniture_redbed.png', 'type': 'furniture', 'colour': 'red'},
        {'colour_images': 'C:\\Users\\bhvpe\\Desktop\\20 images\\colour_furniture_yellowchair.png', 'type': 'furniture', 'colour': 'yellow'},
        {'colour_images': 'C:\\Users\\bhvpe\\Desktop\\20 images\\colour_instrument_bluetrumpet.png', 'type': 'instrument', 'colour': 'blue'},
        {'colour_images': 'C:\\Users\\bhvpe\\Desktop\\20 images\\colour_instrument_greenguitar.png', 'type': 'instrument', 'colour': 'green'},
        {'colour_images': 'C:\\Users\\bhvpe\\Desktop\\20 images\\colour_instrument_redharp.png', 'type': 'instrument', 'colour': 'red'},
        {'colour_images': 'C:\\Users\\bhvpe\\Desktop\\20 images\\colour_instrument_yellowpiano.png', 'type': 'instrument', 'colour': 'yellow'},
        {'colour_images': 'C:\\Users\\bhvpe\\Desktop\\20 images\\colour_ktools_bluepan.png', 'type': 'ktools', 'colour': 'blue'},
        {'colour_images': 'C:\\Users\\bhvpe\\Desktop\\20 images\\colour_ktools_greenknife.png', 'type': 'ktools', 'colour': 'green'},
        {'colour_images': 'C:\\Users\\bhvpe\\Desktop\\20 images\\colour_ktools_redfork.png', 'type': 'ktools', 'colour': 'red'}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
      Routine routine1
    LoopTerminator trials_2
    Routine introduction2
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = blackandwhite_16images.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'bw_images': 'C:\\Users\\bhvpe\\Desktop\\20 images\\bw_furniture_bed.png', 'type': 'furniture', 'colour': 'bw', 'origionalcolour': 'red'},
        {'bw_images': 'C:\\Users\\bhvpe\\Desktop\\20 images\\bw_furniture_chair.png', 'type': 'furniture', 'colour': 'bw', 'origionalcolour': 'yellow'},
        {'bw_images': 'C:\\Users\\bhvpe\\Desktop\\20 images\\bw_furniture_sofa.png', 'type': 'furniture', 'colour': 'bw', 'origionalcolour': 'green'},
        {'bw_images': 'C:\\Users\\bhvpe\\Desktop\\20 images\\bw_furniture_table.png', 'type': 'furniture', 'colour': 'bw', 'origionalcolour': 'blue'},
        {'bw_images': 'C:\\Users\\bhvpe\\Desktop\\20 images\\bw_instrument_guitar.png', 'type': 'instrument', 'colour': 'bw', 'origionalcolour': 'green'},
        {'bw_images': 'C:\\Users\\bhvpe\\Desktop\\20 images\\bw_instrument_harp.png', 'type': 'instrument', 'colour': 'bw', 'origionalcolour': 'red'},
        {'bw_images': 'C:\\Users\\bhvpe\\Desktop\\20 images\\bw_instrument_piano.png', 'type': 'instrument', 'colour': 'bw', 'origionalcolour': 'yellow'},
        {'bw_images': 'C:\\Users\\bhvpe\\Desktop\\20 images\\bw_instrument_trumpet.png', 'type': 'instrument', 'colour': 'bw', 'origionalcolour': 'blue'},
        {'bw_images': 'C:\\Users\\bhvpe\\Desktop\\20 images\\bw_ktools_fork.png', 'type': 'ktools', 'colour': 'bw', 'origionalcolour': 'red'},
        {'bw_images': 'C:\\Users\\bhvpe\\Desktop\\20 images\\bw_ktools_kettle.png', 'type': 'ktools', 'colour': 'bw', 'origionalcolour': 'yellow'}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
      Routine routine2
    LoopTerminator trials
    Routine Thanks
  LoopTerminator trials_4
